<CompuCell3D Revision="20180722" Version="3.7.8">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="200" y="100" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>3</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Basal"/>
      <CellType TypeId="2" TypeName="Lateral"/>
      <CellType TypeId="3" TypeName="ECM"/>
      <CellType TypeId="4" TypeName="Apical"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="Basal">10.0</Energy>
      <Energy Type1="Medium" Type2="Lateral">10.0</Energy>
      <Energy Type1="Medium" Type2="ECM">10.0</Energy>
      <Energy Type1="Medium" Type2="Apical">2.0</Energy>
      <Energy Type1="Basal" Type2="Basal">5.0</Energy>
      <Energy Type1="Basal" Type2="Lateral">10.0</Energy>
      <Energy Type1="Basal" Type2="ECM">2.0</Energy>
      <Energy Type1="Basal" Type2="Apical">10.0</Energy>
      <Energy Type1="Lateral" Type2="Lateral">5.0</Energy>
      <Energy Type1="Lateral" Type2="ECM">10.0</Energy>
      <Energy Type1="Lateral" Type2="Apical">10.0</Energy>
      <Energy Type1="ECM" Type2="ECM">0.0</Energy>
      <Energy Type1="ECM" Type2="Apical">10.0</Energy>
      <Energy Type1="Apical" Type2="Apical">5.0</Energy>
      <NeighborOrder>3</NeighborOrder>
   </Plugin>
   
   <Plugin Name="ContactInternal">
      <!-- Specification of internal adhesion energies -->
      <Energy Type1="Basal" Type2="Basal">0.0</Energy>
      <Energy Type1="Basal" Type2="Lateral">0.0</Energy>
      <Energy Type1="Basal" Type2="ECM">0.0</Energy>
      <Energy Type1="Basal" Type2="Apical">0.0</Energy>
      <Energy Type1="Lateral" Type2="Lateral">0.0</Energy>
      <Energy Type1="Lateral" Type2="ECM">0.0</Energy>
      <Energy Type1="Lateral" Type2="Apical">0.0</Energy>
      <Energy Type1="ECM" Type2="ECM">0.0</Energy>
      <Energy Type1="ECM" Type2="Apical">0.0</Energy>
      <Energy Type1="Apical" Type2="Apical">0.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   
   <Plugin Name="FocalPointPlasticity">
   
   <!-- Specification of focal point junctions -->
   <!-- We separetely specify links between members of same cluster - InternalParameters and members of different clusters Parameters. When not using compartmental  cells comment out InternalParameters specification -->
   <!-- To modify FPP links individually for each cell pair uncomment line below -->
   <Local/>
   <!-- Note that even though you may manipulate lambdaDistance, targetDistance and maxDistance using Python you still need to set activation energy from XML level -->
   <!-- See CC3D manual for details on FPP plugin  -->
   
   <Parameters Type1="Apical" Type2="Apical">
      <Lambda>10</Lambda>
      <ActivationEnergy>-50</ActivationEnergy>
      <TargetDistance>10</TargetDistance>
      <MaxDistance>200</MaxDistance>
      <MaxNumberOfJunctions NeighborOrder="1">2</MaxNumberOfJunctions>
   </Parameters>

   <NeighborOrder>1</NeighborOrder>
</Plugin>

</CompuCell3D>
